<?xml version="1.0" encoding="utf-8"?>
<VarianResearchBeam SchemaVersion="1.0">
<!--*******************************************************************************
A metal ball bearing is placed near radiation isocenter. 
 The sequence will acquire four KV portal images at the four cardinal angles
********************************************************************************-->

   <SetBeam>
	
      <Id>1</Id>
	
      <MLCModel>NDS120HD</MLCModel>
	
      <Accs/>
	
      <ControlPoints>
		
         <Cp> <!--cp 0: Set up initial position of the table, the gantry, the Jaws (open) and the MLC field (square)-->
			
            <SubBeam>
               <Seq>0</Seq>
               <Name>Imaging and treatment coordinate coincidence</Name>
            </SubBeam>
			
            <Energy>6x</Energy>
            <Mu>0</Mu>
            <DRate>600</DRate>
			
            <GantryRtn>0.00</GantryRtn>
            <CollRtn>0.00</CollRtn>
			
            <CouchVrt>30</CouchVrt>
            <CouchLat>30</CouchLat>
			
            <CouchLng>30</CouchLng>
            <CouchRtn>30</CouchRtn>
			
            <Y1>5.00</Y1>
            <Y2>5.00</Y2>
            <X1>6.00</X1>
            <X2>6.00</X2><!-- What should the size of the jaws be?-->
			
            <Mlc>
				<ID>1</ID>
				<B>0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0</B>
				<A>0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0</A>
			</Mlc>
		
         </Cp>
		
         <Cp/> <!--cp 1: Use dummy cp to index first portal image -->
		
         <Cp>
            <GantryRtn>90</GantryRtn> 
         </Cp> <!--cp 2: Use to rotate the Gantry for the second portal image -->
		
         <Cp/> <!--cp 3: Use dummy cp to index second portal image -->
		
         <Cp>
            <GantryRtn>180</GantryRtn>
         </Cp> <!--cp 4: Use to rotate the Gantry for the third portal image -->
	    
         <Cp/> <!--cp 5: Use dummy cp to index third portal image -->
	    
         <Cp>
            <GantryRtn>270</GantryRtn>
         </Cp> <!--cp 6: Use to rotate the Gantry for the fourth portal image -->
	    
         <Cp/> <!--cp 7: Use dummy cp to index fourth portal image -->	
	
      </ControlPoints>
	<!--________________________________________________-->
	<!-- I M A G I N G S E C T I O N -->
	<!--________________________________________________-->
	
      <ImagingParameters>
		
         <OutsideTreatment>
			
            <MaxMu>400</MaxMu> <!-- Check this number later -->
		
         </OutsideTreatment>
		
         <ImagingPoints>
		 <!-- Make sure that the KV imager and source are in the correct position -->	
			
            <ImagingPoint>
					
               <Cp>0</Cp>
					
               <Kvd> <!-- Make sure the Kvd imager is in the right position -->
					
                  <Positions>
					
                     <Lat>0</Lat>
                     <Lng>0</Lng>
                     <Vrt>-70</Vrt>
                     <Pitch>0</Pitch>
					
                  </Positions>
					
               </Kvd> 
					
               <Kvs> <!-- Make sure the KV source is in the right position -->
					
                  <Positions>
					
                     <Lat>0</Lat>
                     <Lng>0</Lng>
                     <Vrt>90</Vrt>
                     <Pitch>0</Pitch>
					
                  </Positions>
					
               </Kvs>					
			 
            </ImagingPoint>
		<!--Take first KV  OBI image -->
			
            <ImagingPoint>
				
               <Cp>1</Cp>
				
               <Acquisition>
				
                  <AcquisitionId>1</AcquisitionId>
				
                  <AcquisitionSpecs>
				
                     <Handshake>true</Handshake>
                     <KV>true</KV>
				
                  </AcquisitionSpecs>
				
                  <AcquisitionParameters>
				
                     <ImageMode id="HighQuality"/> <!--What ID should be used for the QA? -->
				
                     <CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				
                     <ImageDestination>ImageDestination</ImageDestination> <!-- The destination where the image will be saved -->
				
                     <KV> <!--What technique should be used for the QA? -->
				
                        <KiloVolts>80</KiloVolts>
                        <MilliAmperes>50</MilliAmperes>
				
                        <MilliSeconds>10</MilliSeconds>
				
                        <eFluoroLevelControl>None</eFluoroLevelControl>
				
                     </KV>
				
                  </AcquisitionParameters>
				
               </Acquisition>
			
            </ImagingPoint>
			<!--Take second KV OBI image -->
			
            <ImagingPoint>
				
               <Cp>1</Cp>
				
               <Acquisition>
				
                  <AcquisitionId>1</AcquisitionId>
				
                  <AcquisitionSpecs>
				
                     <Handshake>true</Handshake>
                     <KV>true</KV>
				
                  </AcquisitionSpecs>
				
                  <AcquisitionParameters>
				
                     <ImageMode id="HighQuality"/> <!--What ID should be used for the QA? -->
				
                     <CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				
                     <ImageDestination>ImageDestination</ImageDestination> <!-- The destination where the image will be saved -->
				
                     <KV> <!--What technique should be used for the QA? -->
				
                        <KiloVolts>80</KiloVolts>
                        <MilliAmperes>50</MilliAmperes>
				
                        <MilliSeconds>10</MilliSeconds>
				
                        <eFluoroLevelControl>None</eFluoroLevelControl>
				
                     </KV>
				
                  </AcquisitionParameters>
				
               </Acquisition>
			
            </ImagingPoint>
			<!--Take third KV OBI image -->
			
            <ImagingPoint>
				
               <Cp>1</Cp>
				
               <Acquisition>
				
                  <AcquisitionId>1</AcquisitionId>
				
                  <AcquisitionSpecs>
				
                     <Handshake>true</Handshake>
                     <KV>true</KV>
				
                  </AcquisitionSpecs>
				
                  <AcquisitionParameters>
				
                     <ImageMode id="HighQuality"/> <!--What ID should be used for the QA? -->
				
                     <CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				
                     <ImageDestination>ImageDestination</ImageDestination> <!-- The destination where the image will be saved -->
				
                     <KV> <!--What technique should be used for the QA? -->
				
                        <KiloVolts>80</KiloVolts>
                        <MilliAmperes>50</MilliAmperes>
				
                        <MilliSeconds>10</MilliSeconds>
				
                        <eFluoroLevelControl>None</eFluoroLevelControl>
				
                     </KV>
				
                  </AcquisitionParameters>
				
               </Acquisition>
			
            </ImagingPoint>
			<!--Take fourth KV OBI image -->
			
            <ImagingPoint>
				
               <Cp>1</Cp>
				
               <Acquisition>
				
                  <AcquisitionId>1</AcquisitionId>
				
                  <AcquisitionSpecs>
				
                     <Handshake>true</Handshake>
                     <KV>true</KV>
				
                  </AcquisitionSpecs>
				
                  <AcquisitionParameters>
				
                     <ImageMode id="HighQuality"/> <!--What ID should be used for the QA? -->
				
                     <CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				
                     <ImageDestination>ImageDestination</ImageDestination> <!-- The destination where the image will be saved -->
				
                     <KV> <!--What technique should be used for the QA? -->
				
                        <KiloVolts>80</KiloVolts>
                        <MilliAmperes>50</MilliAmperes>
				
                        <MilliSeconds>10</MilliSeconds>
				
                        <eFluoroLevelControl>None</eFluoroLevelControl>
				
                     </KV>
				
                  </AcquisitionParameters>
				
               </Acquisition>
			
            </ImagingPoint>
		
         </ImagingPoints>
		
         <ImagingTolerances/>
	
      </ImagingParameters>

   </SetBeam>

</VarianResearchBeam>