<?xml version="1.0" encoding="utf-8"?>
<VarianResearchBeam SchemaVersion="1.0">
<!--*******************************************************************************
KV OBI is taken to measure:
spatial resolution, contrast, uniformity and noise.
********************************************************************************-->
<SetBeam>
	<Id>1</Id>
	<MLCModel>NDS120HD</MLCModel>
	<Accs></Accs>
	<ControlPoints>
		<Cp> <!--cp 0: Set up to initial positions, square MLC field. -->
			<SubBeam><Seq>0</Seq><Name>Demo Dummy control points</Name></SubBeam>
			<Energy>0k</Energy><Mu>0</Mu><DRate>0</DRate>
			<GantryRtn>90.00</GantryRtn><CollRtn>180.00</CollRtn>
			<CouchVrt>100.0</CouchVrt><CouchLat>100.00</CouchLat><CouchLng>125.00</CouchLng><CouchRtn>180.0</CouchRtn>
			<Y1>5.00</Y1><Y2>5.00</Y2><X1>6.00</X1><X2>6.00</X2><!-- What should the size of the jaws be? Now they are wide open-->
			<Mlc>
				<ID>1</ID>
				<B>0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0</B>
				<A>0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0</A>
			</Mlc>
		</Cp>
		<Cp></Cp> <!--cp 1: Use dummy cp to index KV image. -->
		<Cp><GantryRtn>180.00</GantryRtn></Cp> <!--cp 2: Use this Cp to bring the Gantry to the initial position. -->
	</ControlPoints>
	<!--________________________________________________-->
	<!-- I M A G I N G S E C T I O N -->
	<!--________________________________________________-->
	<ImagingParameters>
	<!-- The images will be taken outside the treatment mode.  -->
	<OutsideTreatment>
	<MaxMu>0</MaxMu> <!-- We did not need to specify the maximum MU because not KV is involved -->
	</OutsideTreatment>
	<ImagingPoints>
	<!--______________________
	Make sure that the imager and the KV source are in the correct position. Do I need this?
	_______________________-->	
	<ImagingPoint>
		<Cp>0</Cp>
		<Kvd>
		<Positions>
		<Lat>0</Lat><Lng>0</Lng><Vrt>-50</Vrt><Pitch>0</Pitch>
		</Positions>
		</Kvd>
		<Kvs>
		<Positions>
		<Lat>0</Lat><Lng>0</Lng><Vrt>100</Vrt><Pitch>0</Pitch>
		</Positions>
		</Kvs>
    </ImagingPoint>
	<!--______________________
	Take KV planar image 
	_______________________-->	
	<ImagingPoint>
	<Cp>1</Cp>
	<Acquisition>
	<AcquisitionId>1</AcquisitionId>
	<AcquisitionSpecs>
	<Handshake>true</Handshake><KV>true</KV>
	</AcquisitionSpecs>
	<AcquisitionParameters>
	<ImageMode id="HighQuality" /> 
	<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
	<ImageDestination>ImageDestination</ImageDestination> 
	<KV> 
	<KiloVolts>80</KiloVolts><MilliAmperes>50</MilliAmperes>
	<MilliSeconds>10</MilliSeconds>
	<eFluoroLevelControl>None</eFluoroLevelControl>
	</KV>
	</AcquisitionParameters>
	</Acquisition>
	</ImagingPoint>
	</ImagingPoints>
	<ImagingTolerances /> <!-- Not imaging tolerance specified -->
	</ImagingParameters>
</SetBeam>
</VarianResearchBeam>