<?xml version="1.0" encoding="utf-8"?>
<VarianResearchBeam SchemaVersion="1.0">
<!--*******************************************************************************
IMAGING AND TREATMENT COORDINATE COINCIDENCE.

There are three isocenters to be concerned with.  The mechanical, the radiation, and imaging system isocenter.  
Stability and consistency are tested. A phantom with embedded BB is used to take  portal images and a KV CBCT. 
the positions of the embedded BBs on these daily images are compared to the base line to verify the imager’s consistency.
Random position of the couch could be generated using the Matlab function "update_couch_position_three_images.m" 
********************************************************************************-->
<SetBeam>
	<Id>1</Id>
	<MLCModel>NDS120HD</MLCModel>
	<Accs></Accs>
	<ControlPoints>
		<Cp> <!--cp 0: Set up initial position of the table, the gantry, the Jaws (open) and the MLC field (square)-->
			<SubBeam><Seq>0</Seq><Name>Imaging and treatment coordinate coincidence</Name></SubBeam>
			<Energy>6x</Energy><Mu>0</Mu><DRate>600</DRate>
			<GantryRtn>180.00</GantryRtn><CollRtn>180.00</CollRtn>
			<CouchVrt>100.0</CouchVrt><CouchLat>100.00</CouchLat>
			<CouchLng>125</CouchLng><CouchRtn>180.0</CouchRtn>
			<Y1>5.00</Y1><Y2>5.00</Y2><X1>6.00</X1><X2>6.00</X2><!-- What should the size of the jaws be?-->
			<Mlc>
				<ID>1</ID>
				<B>0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0</B>
				<A>0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0</A>
			</Mlc>
		</Cp>
		<!--cp 1: Position of the couch when the MV planar image is taken. -->
		<Cp>
		    <GantryRtn>180.00</GantryRtn>
			<CouchVrt>100.0</CouchVrt><CouchLat>100.00</CouchLat>
			<CouchLng>125</CouchLng><CouchRtn>180.0</CouchRtn>
		</Cp> 
		<Cp></Cp> <!--cp 2: Use this dummy to index MV planar image. -->
		<!--cp 3: Position of the couch and Gantry when the KV planar image is taken. -->
		<Cp> 
		    <GantryRtn>90.00</GantryRtn>
			<CouchVrt>100.0</CouchVrt><CouchLat>100.00</CouchLat>
			<CouchLng>125</CouchLng><CouchRtn>180.0</CouchRtn>
		</Cp> 
		<Cp></Cp> <!--cp 4: Use dummy cp to index KV planar image. -->
		
		<!--cp 5: Position of the couch when the KV CBCT image is taken. -->
		<Cp>
			<CouchVrt>100.0</CouchVrt><CouchLat>100.00</CouchLat>
			<CouchLng>125</CouchLng><CouchRtn>180.0</CouchRtn>
		</Cp> 
		<Cp><GantryRtn>-4</GantryRtn> </Cp> <!--cp 6: Use to rotate the Gantry to the initial position for  KV CBCT acquisition -->
		<Cp><GantryRtn>0</GantryRtn> </Cp> <!--cp 7: Use to start the Gantry for  KV CBCT acquisition -->
		<Cp><GantryRtn>360</GantryRtn> </Cp> <!--cp 8: Use to stop  KV CBCT acquisition -->
		<Cp><GantryRtn>364</GantryRtn> </Cp> <!--cp 9: Use to end the rotation of the Gantry for  KV CBCT acquisition -->
		<Cp><GantryRtn>180</GantryRtn> </Cp> <!--cp 10: Use to bring the Gantry back to initial position -->
	</ControlPoints>
	<!--________________________________________________-->
	<!-- I M A G I N G S E C T I O N -->
	<!--________________________________________________-->
	<ImagingParameters>
		<OutsideTreatment>
			<MaxMu>400</MaxMu> 
		</OutsideTreatment>
		<ImagingPoints>
		<!-- Make sure that the MV and KV imagers and source are in the correct position -->	
			<ImagingPoint>
					<Cp>0</Cp>
					<Mvd> 
						<Positions>
						<Lat>0</Lat><Lng>0</Lng><Vrt>-50</Vrt><Pitch>0</Pitch>
						</Positions>
					</Mvd>	
					<Kvd> <!-- Make sure the Kvd imager is in the right position -->
						<Positions>
						<Lat>0</Lat><Lng>0</Lng><Vrt>-50</Vrt><Pitch>0</Pitch>
						</Positions>
					</Kvd> 
					<Kvs> <!-- Make sure the KV source is in the right position -->
						<Positions>
						<Lat>0</Lat><Lng>0</Lng><Vrt>100</Vrt><Pitch>0</Pitch>
						</Positions>
					</Kvs>							        
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>2</Cp>
				<Acquisition>
				<AcquisitionId>1</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" /> 
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination>
				<MV/> <!-- This is an MV image -->
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
		<!--Take KV OBI image -->
			<ImagingPoint>
				<Cp>4</Cp>
				<Acquisition>
				<AcquisitionId>2</AcquisitionId>
				<AcquisitionSpecs>
				<Handshake>true</Handshake><KV>true</KV>
				</AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="HighQuality" /> 
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> 
				<KV> 
				<KiloVolts>80</KiloVolts><MilliAmperes>50</MilliAmperes>
				<MilliSeconds>10</MilliSeconds>
				<eFluoroLevelControl>None</eFluoroLevelControl>
				</KV>
				</AcquisitionParameters>
				</Acquisition>
			</ImagingPoint>
		<!--Take KV CBCT image -->	
			<ImagingPoint>
				<Cp>7</Cp>
				<AcquisitionStart>
				<AcquisitionId>3</AcquisitionId>
				<AcquisitionSpecs>
				<Handshake>true</Handshake>
				<KV>true</KV>
				</AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="DynamicGainFluoro"/>
				<CalibrationSet>IMG-CBCT</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination>
				<KV>
				<KiloVolts>100</KiloVolts><MilliAmperes>40</MilliAmperes>
				<MilliSeconds>10</MilliSeconds><eFocalSpot>Large</eFocalSpot>
				<eFluoroLevelControl>None</eFluoroLevelControl>
				</KV>
				</AcquisitionParameters>
				</AcquisitionStart>
			</ImagingPoint>
			<ImagingPoint>
				<Cp>8</Cp>
				<AcquisitionStop>
				<AcquisitionId>3</AcquisitionId> <!-- Stop the image with acquisition ID 3-->
				<AcquisitionSpecs />
				</AcquisitionStop>
			</ImagingPoint>
		</ImagingPoints>
		<ImagingTolerances/>
	</ImagingParameters>
</SetBeam>
</VarianResearchBeam>