<?xml version="1.0" encoding="utf-8"?>
<VarianResearchBeam SchemaVersion="1.0">
<!--*******************************************************************************
Take MV EPID images every 30 degrees between 0 and 360

********************************************************************************-->
<SetBeam>
	<Id>1</Id>
	<MLCModel>NDS120HD</MLCModel>
	<Accs></Accs>
	<ControlPoints>
		<Cp> <!--cp 0: Set up initial position of the table, the gantry, the Jaws (open) and the MLC field (square)-->
			<SubBeam><Seq>0</Seq><Name>Imaging and treatment coordinate coincidence</Name></SubBeam>
			<Energy>6x</Energy><Mu>0</Mu><DRate>600</DRate>
			<GantryRtn>180.00</GantryRtn><CollRtn>180.00</CollRtn>
			<CouchVrt>100.0</CouchVrt><CouchLat>100.00</CouchLat><CouchLng>125.00</CouchLng><CouchRtn>180.0</CouchRtn>
			<Y1>5.00</Y1><Y2>5.00</Y2><X1>6.00</X1><X2>6.00</X2>
			<Mlc>
				<ID>1</ID>
				<B>0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0</B>
				<A>0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0</A>
			</Mlc>
		</Cp>
		<!--cp 1: Rotate gantry. -->
		<Cp><GantryRtn>0</GantryRtn></Cp>
		<Cp></Cp> <!--cp 2: Use this dummy to index MV EPID image. -->
		<!--cp 3: Rotate gantry. -->
		<Cp><GantryRtn>30</GantryRtn></Cp>
		<Cp></Cp> <!--cp 4: Use this dummy to index MV EPID image. -->
		<!--cp 5: Rotate gantry. -->
		<Cp><GantryRtn>60</GantryRtn></Cp>
		<Cp></Cp> <!--cp 6: Use this dummy to index MV EPID image. -->
		<!--cp 7: Rotate gantry. -->
		<Cp><GantryRtn>90</GantryRtn></Cp>
		<Cp></Cp> <!--cp 8: Use this dummy to index MV EPID image. -->
		<!--cp 9: Rotate gantry. -->
		<Cp><GantryRtn>120</GantryRtn></Cp>
		<Cp></Cp> <!--cp 10: Use this dummy to index MV EPID image. -->
		<!--cp 11: Rotate gantry. -->
		<Cp><GantryRtn>150</GantryRtn></Cp>
		<Cp></Cp> <!--cp 12: Use this dummy to index MV EPID image. -->
		<!--cp 13: Rotate gantry. -->
		<Cp><GantryRtn>180</GantryRtn></Cp>
		<Cp></Cp> <!--cp 14: Use this dummy to index MV EPID image. -->
		<!--cp 15: Rotate gantry. -->
		<Cp><GantryRtn>210</GantryRtn></Cp>
		<Cp></Cp> <!--cp 16: Use this dummy to index MV EPID image. -->
		<!--cp 17: Rotate gantry. -->
		<Cp><GantryRtn>240</GantryRtn></Cp>
		<Cp></Cp> <!--cp 18: Use this dummy to index MV EPID image. -->
		<!--cp 19: Rotate gantry. -->
		<Cp><GantryRtn>270</GantryRtn></Cp>
		<Cp></Cp> <!--cp 20: Use this dummy to index MV EPID image. -->
		<!--cp 21: Rotate gantry. -->
		<Cp><GantryRtn>300</GantryRtn></Cp>
		<Cp></Cp> <!--cp 22: Use this dummy to index MV EPID image. -->
		<!--cp 23: Rotate gantry. -->
		<Cp><GantryRtn>330</GantryRtn></Cp>
		<Cp></Cp> <!--cp 24: Use this dummy to index MV EPID image. -->
		<!--cp 25: Rotate gantry. -->
		<Cp><GantryRtn>360</GantryRtn></Cp>
		<Cp></Cp> <!--cp 26: Use this dummy to index MV EPID image. -->
		<Cp><GantryRtn>180</GantryRtn></Cp> <!--cp 27: Use this dummy CP to return the gantry to initial position. -->
	</ControlPoints>
	<!--________________________________________________-->
	<!-- I M A G I N G S E C T I O N -->
	<!--________________________________________________-->
	<ImagingParameters>
		<OutsideTreatment>
			<MaxMu>400</MaxMu> 
		</OutsideTreatment>
		<ImagingPoints>
			 <!-- Make sure that the MV EPID is in the correct position -->	
			 <ImagingPoint>
			        <Cp>0</Cp>
			        <Mvd> 
					<Positions>
					<Lat>0</Lat><Lng>0</Lng><Vrt>-50</Vrt><Pitch>0</Pitch>
					</Positions>
					</Mvd>	
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>2</Cp>
				<Acquisition>
				<AcquisitionId>1</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" /> 
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> 
				<MV/> <!-- This is an MV image -->
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>4</Cp>
				<Acquisition>
				<AcquisitionId>2</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" /> 
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> 
				<MV/> <!-- This is an MV image -->
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>6</Cp>
				<Acquisition>
				<AcquisitionId>3</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" />
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> 
				<MV/> <!-- This is an MV image -->
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>8</Cp>
				<Acquisition>
				<AcquisitionId>4</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" /> 
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> 
				<MV/> <!-- This is an MV image -->
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>10</Cp>
				<Acquisition>
				<AcquisitionId>5</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" /> 
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> 
				<MV/> <!-- This is an MV image -->
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>12</Cp>
				<Acquisition>
				<AcquisitionId>6</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" /> 
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> 
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>14</Cp>
				<Acquisition>
				<AcquisitionId>7</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" /> 
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> 
				<MV/> <!-- This is an MV image -->
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>16</Cp>
				<Acquisition>
				<AcquisitionId>8</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" /> 
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> 
				<MV/> <!-- This is an MV image -->
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>18</Cp>
				<Acquisition>
				<AcquisitionId>9</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" /> 
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> 
				<MV/> <!-- This is an MV image -->
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>20</Cp>
				<Acquisition>
				<AcquisitionId>10</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" /> 
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> 
				<MV/> <!-- This is an MV image -->
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>22</Cp>
				<Acquisition>
				<AcquisitionId>11</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" /> 
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> 
				<MV/> <!-- This is an MV image -->
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>24</Cp>
				<Acquisition>
				<AcquisitionId>12</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" /> 
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination>
				<MV/> <!-- This is an MV image -->
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>26</Cp>
				<Acquisition>
				<AcquisitionId>13</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" /> 
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> 
				<MV/> <!-- This is an MV image -->
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
		</ImagingPoints>
		<ImagingTolerances/>
	</ImagingParameters>
</SetBeam>
</VarianResearchBeam>