<VarianResearchBeam SchemaVersion="1.0">
<!--*******************************************************************************
Orthogonal MV+KV planar images taken
Orthogonal MV+KV CBCT images taken
********************************************************************************-->
<SetBeam>
	<Id>1</Id>
	<MLCModel>NDS120HD</MLCModel>
	<Accs></Accs>
	<ControlPoints>
		<Cp> <!--cp 0: Set up initial position of the table, the gantry, the Jaws (open) and the MLC field (square)-->
			<SubBeam><Seq>0</Seq><Name>Imaging and treatment coordinate coincidence</Name></SubBeam>
			<Energy>0k</Energy><Mu>0</Mu><DRate>0</DRate>
			<GantryRtn>180.00</GantryRtn><CollRtn>180.00</CollRtn>
			<CouchVrt>100.0</CouchVrt><CouchLat>100.00</CouchLat>
			<CouchLng>125.00</CouchLng><CouchRtn>180.0</CouchRtn>
			<Y1>5.00</Y1><Y2>5.00</Y2><X1>6.00</X1><X2>6.00</X2><!-- What should the size of the jaws be?-->
			<Mlc>
				<ID>1</ID>
				<B>0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0</B>
				<A>0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0</A>
			</Mlc>
		</Cp>
	</ControlPoints>
	<!--________________________________________________-->
	<!-- I M A G I N G S E C T I O N -->
	<!--________________________________________________-->
	<ImagingParameters>
		<OutsideTreatment>
			<MaxMu>0</MaxMu> <!-- Check this number later -->
		</OutsideTreatment>
		<ImagingPoints>
			 <!-- Make sure that the KV imager and source are in the correct position -->	
			<ImagingPoint>
					<Cp>0</Cp>
					<Kvd> <!-- Make sure the Kvd imager is in the right position -->
					<Positions>
					<Lat>0</Lat><Lng>0</Lng><Vrt>-50</Vrt><Pitch>0</Pitch>
					</Positions>
					</Kvd> 
					<Kvs> <!-- Make sure the KV source is in the right position -->
					<Positions>
					<Lat>0</Lat><Lng>0</Lng><Vrt>100</Vrt><Pitch>0</Pitch>
					</Positions>
					</Kvs>					
			 </ImagingPoint>
		<!--Take KV  planar image -->
			<ImagingPoint>
				<Cp>2</Cp>
				<Acquisition>
				<AcquisitionId>1</AcquisitionId>
				<AcquisitionSpecs>
				<Handshake>true</Handshake><KV>true</KV>
				</AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="HighQuality" /> <!--What ID should be used for the QA? -->
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> <!-- The destination where the image will be saved -->
				<KV> <!--What technique should be used for the QA? -->
				<KiloVolts>80</KiloVolts><MilliAmperes>50</MilliAmperes>
				<MilliSeconds>10</MilliSeconds>
				<eFluoroLevelControl>None</eFluoroLevelControl>
				</KV>
				</AcquisitionParameters>
				</Acquisition>
			</ImagingPoint>
		</ImagingPoints>
		<ImagingTolerances/>
	</ImagingParameters>
	</SetBeam>
</VarianResearchBeam>