<?xml version="1.0" encoding="utf-8"?>
<VarianResearchBeam SchemaVersion="1.0">
<!--*******************************************************************************
MV EPID image is taken to measure:
spatial resolution, contrast, uniformity and noise.
********************************************************************************-->
<SetBeam>
	<Id>1</Id>
	<MLCModel>NDS120HD</MLCModel>
	<Accs></Accs>
	<ControlPoints>
		<Cp> <!--cp 0: Set up to initial positions, square MLC field. 
			<SubBeam><Seq>0</Seq><Name>Demo Dummy control points</Name></SubBeam>
			<Energy>6x</Energy><Mu>0</Mu><DRate>600</DRate>
			<GantryRtn>180.00</GantryRtn><CollRtn>180.00</CollRtn>
			<CouchVrt>100.0</CouchVrt><CouchLat>100.00</CouchLat><CouchLng>125.00</CouchLng><CouchRtn>180.0</CouchRtn>
			<Y1>5.00</Y1><Y2>5.00</Y2><X1>6.00</X1><X2>6.00</X2><!-- What should the size of the jaws be? Now they are wide open-->
			<Mlc>
				<ID>1</ID>
				<B>0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0</B>
				<A>0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 5.000 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0</A>
			</Mlc>
		</Cp>
		<Cp></Cp> <!--cp 1: Use dummy cp to index KV image. -->
	</ControlPoints>
	<!--________________________________________________-->
	<!-- I M A G I N G S E C T I O N -->
	<!--________________________________________________-->
	<ImagingParameters>
	<!-- The images will be taken outside the treatment mode.  -->
	<OutsideTreatment>
	<MaxMu>100</MaxMu> <!-- What this number should be?-->
	</OutsideTreatment>
	<ImagingPoints>
	
	<!--______________________
	Take MV planar image 
	_______________________-->	
	         <ImagingPoint>
					<Cp>0</Cp>
					<Mvd> 
						<Positions>
						<Lat>0</Lat><Lng>0</Lng><Vrt>-50</Vrt><Pitch>0</Pitch>
						</Positions>
					</Mvd>							        
			</ImagingPoint>
		<!--Take MV  EPID image -->
			<ImagingPoint>
				<Cp>1</Cp>
				<Acquisition>
				<AcquisitionId>1</AcquisitionId>
				<AcquisitionSpecs><Handshake>true</Handshake></AcquisitionSpecs>
				<AcquisitionParameters>
				<ImageMode id="Highres" /> <!--What ID should be used for the QA? -->
				<CalibrationSet>DefaultCalibrationSetId</CalibrationSet>
				<ImageDestination>ImageDestination</ImageDestination> <!-- The destination where the image will be saved -->
				<MV/> <!-- This is an MV image -->
				</AcquisitionParameters>
				</Acquisition>		
			</ImagingPoint>
	</ImagingPoints>
	<ImagingTolerances /> <!-- Not imaging tolerance specified -->
	</ImagingParameters>
</SetBeam>
</VarianResearchBeam>